# 1 "/opt/topspin216/exp/stan/nmr/lists/pp/cosyqf45"
;cosyqf45
;avance-version (07/04/04)
;2D homonuclear shift correlation
;using 45 degree read pulse
;
;W.P. Aue, E. Bartholdi, R.R. Ernst, J. Chem. Phys. 64, 2229 (1976)
;K. Nagayama et al., J. Magn. Reson. 40, 321 (1980)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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

"in0=inf1"

"d0=3u"


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define delay MCWRK
define delay MCREST
"MCWRK = 0.500000*d1"
"MCREST = d1 - d1"
    dccorr
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1 ze
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2 MCWRK 
LBLF1, MCWRK
  MCREST
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3 p1 ph1
  d0
  p1*0.5 ph2
  go=2 ph31
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  MCWRK  wr #0 if #0 zd id0 
  lo to LBLF1 times td1
  MCWRK
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exit


ph1=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph2=0 1 2 3
ph31=0 2 0 2 3 1 3 1 2 0 2 0 1 3 1 3


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;NS: 4 * n
;DS: 16
;td1: number of experiments
;FnMODE: QF


;$Id: cosyqf45,v 1.5 2007/04/11 13:34:29 ber Exp $
